// "StartupMacros"
// The macros and macro tools in this file ("StartupMacros.txt") are 
// automatically installed in the Plugins>Macros submenu and
//  in the tool bar when ImageJ starts up.

//  About the drawing tools.
//
//  This is a set of drawing tools similar to the pencil, paintbrush
//  and flood fill (paint bucket) tools in NIH Image. The pencil
//  and paintbrush draw in the current foreground color. The
//  flood fill tool fills the selected area using the foreground color.
//  Hold down the alt key to have the pencil and paintbrush draw 
//  using the background color or to have the flood fill tool fill 
//  using the background color. Set the foreground and background 
//  colors by double-clicking on the eye dropper tool.  Double-click
//  on the pencil or paintbrush tool to set the drawing width for that tool.
//
// Icons contributed by Tony Collins.

   // Global variables
   var pencilWidth=1,  eraserWidth=10, leftClick=16, alt=8;
   var brushWidth = 10; //call("ij.Prefs.get", "startup.brush", "10");
   var floodType =  "8-connected"; //call("ij.Prefs.get", "startup.flood", "8-connected");

   // The macro named "AutoRun" runs when ImageJ starts.
   // macro "AutoRun" {
   //    print("AutoRun");
   // }

   // The macro named "AutoRunAndHide" runs when ImageJ starts
   // and the file containing it is not displayed when ImageJ opens it.
   // macro "AutoRunAndHide" {}

  var pmCmds = newMenu("Popup Menu",
       newArray("Help...", "Rename...", "Duplicate...", "Original Scale", 
       "Paste Control...", "-", "Record...", "Capture Screen ", "Monitor Memory...", 
       "List Commands...", "Control Panel...", "Startup Macros...", "Search..."));

  macro "Popup Menu" {
      cmd = getArgument();
      if (cmd=="Help...")
           showMessage("About Popup Menu",
               "To customize this menu, edit the line that starts with\n\"var pmCmds\" in ImageJ/macros/StartupMacros.txt.");
      else
          run(cmd);
  }

  macro "Unused Tool -" {}

  //macro "Abort Macro or Plugin (or press Esc key) Action Tool - CbooP51b1f5fbbf5f1b15510T5c10X" {
  //    setKeyDown("Esc");
  //
 
  var xx = requires138b(); // check version at install
  function requires138b() {requires("1.38b"); return 0; }

     var dCmds = newMenu("Developer Menu Tool",
      newArray("ImageJ Website","News", "Documentation", "ImageJ Wiki", "Resources", "Macro Language", "Macros", 
      "Macro Functions", "Startup Macros...", "Plugins", "Source Code", "Mailing List Archives", "-", "Record...", 
      "Capture Screen ", "Monitor Memory...", "List Commands...", "Control Panel...", "Search...", "Debug Mode"));
      
  macro "Developer Menu Tool - C037T0b11DT7b09eTcb09v" {
       cmd = getArgument();
       if (cmd=="ImageJ Website")
           run("URL...", "url=http://rsbweb.nih.gov/ij/");
       else if (cmd=="News")
           run("URL...", "url=http://rsbweb.nih.gov/ij/notes.html");
       else if (cmd=="Documentation")
           run("URL...", "url=http://rsbweb.nih.gov/ij/docs/");
       else if (cmd=="ImageJ Wiki")
           run("URL...", "url=http://imagejdocu.tudor.lu/imagej-documentation-wiki/");
       else if (cmd=="Resources")
           run("URL...", "url=http://rsbweb.nih.gov/ij/developer/");
       else if (cmd=="Macro Language")
           run("URL...", "url=http://rsbweb.nih.gov/ij/developer/macro/macros.html");
       else if (cmd=="Macros")
           run("URL...", "url=http://rsbweb.nih.gov/ij/macros/");
        else if (cmd=="Macro Functions")
           run("URL...", "url=http://rsbweb.nih.gov/ij/developer/macro/functions.html");
        else if (cmd=="Plugins")
           run("URL...", "url=http://rsbweb.nih.gov/ij/plugins/");
        else if (cmd=="Source Code")
           run("URL...", "url=http://rsbweb.nih.gov/ij/developer/source/");
        else if (cmd=="Mailing List Archives")
           run("URL...", "url=https://list.nih.gov/archives/imagej.html");
        else if (cmd=="Debug Mode")
           setOption("DebugMode", true);
	 else if (cmd!="-")
            run(cmd);
  }

  var sCmds = newMenu("Stacks Menu Tool", 
       newArray("Add Slice", "Delete Slice", "Next Slice [>]", "Previous Slice [<]", "Set Slice...", "-",
       "Images to Stack", "Stack to Images", "Make Montage...", "Reslice [/]...", "Z Project...",
       "3D Project...", "Plot Z-axis Profile", "-", "Label...", "Combine...", "Concatenate...", "-",
       "Start Animation", "Stop Animation", "Animation Options...", "-", "T1 Head (2.4M, 16-bits)"));
  macro "Stacks Menu Tool - C037T1b11ST8b09tTcb09k" {
      cmd = getArgument();
      if (cmd=="Images to Stack")
          run(cmd, " ");
      else if (cmd!="-")
          run(cmd);
  }

   macro "Paintbrush Tool - C037La077Ld098L6859L4a2fL2f4fL5e9bL9b98L6888L5e8dL888cC123L8a3fL8b6d" {
        getCursorLoc(x, y, z, flags);
        if (flags&alt!=0)
              setColorToBackgound();
        draw(brushWidth);
   }

   macro 'Paintbrush Tool Options...' {
      brushWidth = getNumber("Brush Width (pixels):", brushWidth);
      call("ij.Prefs.set", "startup.brush", brushWidth);
  }

   macro "Flood Fill Tool -C037B21P085373b75d0L4d1aL3135L4050L6166D57D77D68D09D94Da7C123Da5La9abLb6bc" {
        setupUndo();
        getCursorLoc(x, y, z, flags);
        if (flags&alt!=0) setColorToBackgound();
        floodFill(x, y, floodType);
   }

   function draw(width) {
        setupUndo();
        getCursorLoc(x, y, z, flags);
        setLineWidth(width);
        moveTo(x,y);
        x2=-1; y2=-1;
        while (true) {
            getCursorLoc(x, y, z, flags);
            if (flags&leftClick==0) exit();
            if (x!=x2 || y!=y2)
                lineTo(x,y);
            x2=x; y2 =y;
            wait(10);
        }
   }

   function setColorToBackgound() {
       setColor(getValue("color.background"));
   }

  macro 'Flood Fill Tool Options...' {
      Dialog.create("Flood Fill Tool");
      Dialog.addChoice("Flood Type:", newArray("4-connected", "8-connected"), floodType);
      Dialog.show();
      floodType = Dialog.getChoice();
      call("ij.Prefs.set", "startup.flood", floodType);
  }
 
  macro "Set Drawing Color..."{ 
      run("Color Picker..."); 
  }

  macro "-" {} //menu divider

  macro "About Startup Macros..." {
      path = getDirectory("macros")+"About Startup Macros";
      if (!File.exists(path))
          exit("\"About Startup Macros\" not found in ImageJ/macros/.");
      open(path);
  }

  // This example macro demonstrates how to create a
  // custom command with a keyboard shortcut.
  macro "Save As JPEG... [j]" {
     quality = call("ij.plugin.JpegWriter.getQuality");
     quality = getNumber("JPEG quality (0-100):", quality);
     run("Input/Output...", "jpeg="+quality);
     saveAs("Jpeg");
  }

macro "Monitor diSPIM Acquisition" {
	arg = getArgument();
	print(arg);
    minA =0;
    maxA = 255;
    channelsA = "11";
    modeA="composite";
    vWidth = 0.163;
    vHeight = 0.163;
    vDepth = 1.000;
    vUnit = "micron";

	dir = "";
	dir = arg;
	print(dir);
	//waitForUser("");
	while (File.isDirectory(dir) != 1) {
		dir = getDirectory("Select top directory for diSPIM raw data");
	}
	IJ.log(dir);
	fileListA = newArray("");
	fileListB = newArray("");
	fileRanksA = newArray("");
	fileRanksB = newArray("");
	fileNumsA = newArray("");
	fileNumsB = newArray("");
	fileSortA = newArray("");
	fileSortB = newArray("");
	newTifListA = newArray("");
	newTifListB = newArray("");
	listA = newArray("");
	listB = newArray("");

	File.saveString("", dir+"Big5DFileListA.txt");
	while(!File.exists(dir+"Big5DFileListA.txt"))
		wait(100);
	File.saveString("", dir+"Big5DFileListB.txt");
	while(!File.exists(dir+"Big5DFileListB.txt"))
		wait(100);
	File.saveString("", dir+"BigMAXFileListA.txt");
	while(!File.exists(dir+"BigMAXFileListA.txt"))
		wait(100);
	File.saveString("", dir+"BigMAXFileListB.txt");
	while(!File.exists(dir+"BigMAXFileListB.txt"))
		wait(100);

	Dialog.create("Data Set Parameters?");
	Dialog.addNumber("Wavelengths", 2);
	Dialog.addNumber("Z Slices/Stack", 49);
	Dialog.show();
	wavelengths = Dialog.getNumber();
	zSlices = Dialog.getNumber();

	fileListA = getFileList(""+dir+"SPIMA" + File.separator);
 	fileListB = getFileList(""+dir +"SPIMB" + File.separator);
	fileRanksA = Array.copy(fileListA);
	fileRanksB = Array.copy(fileListB);
	fileNumsA = Array.copy(fileListA);
	fileNumsB = Array.copy(fileListB);
	fileSortA = Array.copy(fileListA);
	fileSortB = Array.copy(fileListB);

    big5DFileListAString = ("");	    
    big5DFileListBString =("");

    for (a=0;a<lengthOf(fileListA);a++) {
	  if(!endsWith(fileListA[a], ".roi")){
		sring = replace(fileListA[a], "/", "");
		subsring = sring;
		prefix = "";
		while (isNaN(parseInt(subsring))) {
			prefix = prefix + substring(subsring, 0,1);
			subsring = substring(subsring,1);
			print(subsring);
			print(prefix);
		}
		if(startsWith(toLowerCase(prefix), "t")
		 	|| startsWith(toLowerCase(prefix), "f"))
			prefix = "aaaaa"+prefix;
		numer = parseInt(subsring);
		print(subsring+" "+numer);
		fileNumsA[a] =prefix+ IJ.pad(numer,6)+"|"+sring;
	
		sring = replace(fileListA[a], "/", "");
		subsring = sring;
		prefix = "";
		while (isNaN(parseInt(subsring))) {
			prefix = prefix + substring(subsring, 0,1);
			subsring = substring(subsring,1);
			print(subsring);
			print(prefix);
		}
		 if(startsWith(toLowerCase(prefix), "t")
		 	|| startsWith(toLowerCase(prefix), "f"))
			prefix = "aaaaa"+prefix;
		numer = parseInt(subsring);
		print(subsring+" "+numer);
		fileNumsB[a] =prefix+ IJ.pad(numer,6)+"|"+sring;
	  }

    }
   	Array.sort(fileNumsA);
   	Array.sort(fileNumsB);

    for (r=0;r<lengthOf(fileNumsA);r++) {
		splt =split(fileNumsA[r],"|");
		fileSortA[r] = splt [1];
		print(r+" "+" "+fileNumsA[r]+" "+fileSortA[r]);
		splt =split(fileNumsB[r],"|");
		fileSortB[r] = splt[1];
    }
	   
	for (d=0;d<lengthOf(fileSortA);d++) {
		skipIt = false;
	    nextPathA =  dir + "SPIMA" + File.separator + fileSortA[d];
	    nextPathB =  dir + "SPIMB" + File.separator + fileSortB[d];
	    print(nextPathA);
	    print(nextPathB);
 	    if ( File.isDirectory(nextPathA) == 1  && File.isDirectory(nextPathB) == 1) {
			newTifListA = getFileList(nextPathA);
			newTifListB = getFileList(nextPathB);
			if (lengthOf(newTifListA) != lengthOf(newTifListB) || lengthOf(newTifListA) != wavelengths*zSlices)
				skipIt = true;
			if(!skipIt) {
				Array.sort(newTifListA);		
				for (f=0;f<lengthOf(newTifListA);f++) {
					while(!File.exists(dir+"Big5DFileListA.txt"))
					wait(100);
					if (indexOf(big5DFileListAString, nextPathA + File.separator+newTifListA[f])<0)
						File.append(nextPathA + File.separator +newTifListA[f], dir+"Big5DFileListA.txt");
			    }
				Array.sort(newTifListB);		
				for (f=0;f<lengthOf(newTifListB);f++) {
					while(!File.exists(dir+"Big5DFileListB.txt"))
					wait(100);
					if (indexOf(big5DFileListBString, nextPathB + File.separator+newTifListB[f])<0)
						File.append(nextPathB + File.separator +newTifListB[f], dir+"Big5DFileListB.txt");
			    }
		    }
	    }

	}


    print(nImages);

    if (File.length(dir+"Big5DFileListA.txt" ) >0) {
	    run("Stack From List...", "open="+dir+"Big5DFileListA.txt use");
  	    stkNSlices = nSlices;

	    rename("SPIMA: "+dir);

		Stack.setDimensions(wavelengths, zSlices, stkNSlices/(wavelengths*zSlices));
		print(wavelengths+" "+zSlices+" "+stkNSlices/(wavelengths*zSlices));
		if (wavelengths > 1){
			run("Make Composite", "display=Composite");
			selectWindow("SPIMA: "+dir);
			while (!is("composite")) {
				wait(100);
				//selectWindow("SPIMA: "+dir);
			}
	  	    Stack.setPosition(1, 1, 1);	
		    run("Green");
		    resetMinAndMax;
	  	    Stack.setPosition(2, 1, 1);	
		    run("Red");
		    resetMinAndMax;
	    } else {
			selectWindow("SPIMA: "+dir);
	    }
	    
	    setVoxelSize(vWidth, vHeight, vDepth, vUnit);    

 	    Stack.setPosition(wavelengths, zSlices/2, stkNSlices/(wavelengths*zSlices));	
  	    getChannel = getSlice = getFrame =1;
  	    Stack.getPosition(getChannel, getSlice, getFrame);		    
  		while (getSlice != floor(zSlices/2) || getFrame != floor(stkNSlices/(wavelengths*zSlices))) {
  			wait(100);
	  	    Stack.getPosition(getChannel, getSlice, getFrame);		    
		}
		resetMinAndMax;		
  	    Stack.setPosition(1, zSlices/2, stkNSlices/(wavelengths*zSlices));	
		resetMinAndMax;		
		
		updateDisplay();

	}

    if (File.length(dir+"Big5DFileListB.txt" ) >0) {
	    run("Stack From List...", "open="+dir+"Big5DFileListB.txt use");
	    stkNSlices = nSlices;
	    rename("SPIMB: "+dir);

		Stack.setDimensions(wavelengths, zSlices, stkNSlices/(wavelengths*zSlices));
		print(wavelengths+" "+zSlices+" "+stkNSlices/(wavelengths*zSlices));
		if (wavelengths > 1){
			run("Make Composite", "display=Composite");
			selectWindow("SPIMB: "+dir);
			while (!is("composite")) {
				wait(100);
				//selectWindow("SPIMB: "+dir);
			}
	  	    Stack.setPosition(1, 1, 1);	
		    run("Green");
		    resetMinAndMax;
	  	    Stack.setPosition(2, 1, 1);	
		    run("Red");
		    resetMinAndMax;
	    } else {
			selectWindow("SPIMB: "+dir);
	    }
	    
	    
	    setVoxelSize(vWidth, vHeight, vDepth, vUnit);    

  	    Stack.setPosition(wavelengths, zSlices/2, stkNSlices/(wavelengths*zSlices));	
  	    getChannel = getSlice = getFrame =1;
  	    Stack.getPosition(getChannel, getSlice, getFrame);		    
  		while (getSlice != floor(zSlices/2) || getFrame != floor(stkNSlices/(wavelengths*zSlices))) {
  			wait(100);
	  	    Stack.getPosition(getChannel, getSlice, getFrame);		    
		}
		resetMinAndMax;		
  	    Stack.setPosition(1, zSlices/2, stkNSlices/(wavelengths*zSlices));	
		resetMinAndMax;		

		updateDisplay();


	}
	
	run("Tile");
    print(nImages);

	while (true) {
		focus = false;
	    listA = getFileList(""+dir+"SPIMA" + File.separator);
 	    listB = getFileList(""+dir +"SPIMB" + File.separator);
	    big5DFileListAString = File.openAsString(dir+"Big5DFileListA.txt");	    
	    big5DFileListBString = File.openAsString(dir+"Big5DFileListB.txt");

	    while (lengthOf(fileListA) == lengthOf(listA) || lengthOf(fileListB) == lengthOf(listB) ) {
			if (IJ.escapePressed() == "true")
				exit("Monitoring of "+ dir+ " cancelled by Escape.");
		 	listA = getFileList(""+dir +"SPIMA" + File.separator);
			listB = getFileList(""+dir +"SPIMB" + File.separator);
			wait(5000);
	    }	

		if (isOpen("Display Channels")) {
			selectWindow("Display Channels");
			run("Close");
		}

	    fileListA = getFileList(dir +"SPIMA" + File.separator);
	    fileListB = getFileList(dir + "SPIMB" + File.separator);

	    modDateA = 0;
	    recentestA = "";
	    for (a=0;a<lengthOf(fileListA);a++) {
			if (modDateA < File.lastModified(dir +"SPIMA" + File.separator + fileListA[a])) {
				modDateA = File.lastModified(dir + "SPIMA" + File.separator + fileListA[a]);
				recentestA = dir + "SPIMA" + File.separator + fileListA[a];
			}
	    }
	    IJ.log(recentestA +"\n"+ modDateA);
	    if (File.isDirectory(recentestA) == 1) {
		    newTifList = "";
		    while (lengthOf(newTifList) != wavelengths*zSlices)
				newTifList = getFileList(recentestA);
			Array.sort(newTifList);		
			for (f=0;f<lengthOf(newTifList);f++) {
				while(!File.exists(dir+"Big5DFileListA.txt"))
					wait(100);
				if (indexOf(big5DFileListAString, recentestA+newTifList[f])<0)
					File.append(recentestA+newTifList[f], dir+"Big5DFileListA.txt");
			}
	    }
	    
	    modDateB = 0;
	    recentestB = "";
	    recentestBname ="";
	    for (b=0;b<lengthOf(fileListB);b++) {
			if (modDateB < File.lastModified(dir +"SPIMB" + File.separator + fileListB[b])) {
				modDateB= File.lastModified(dir + "SPIMB" + File.separator + fileListB[b]);
				recentestB = dir + "SPIMB" + File.separator + fileListB[b];
				recentestBname = fileListB[b];
			}
	    }
	    IJ.log(recentestB+"\n"+ modDateB);
		if(startsWith(toLowerCase(recentestBname), "f"))
		 	focus = true;
	    if (File.isDirectory(recentestB) == 1) {
		    newTifList = "";
		    while (lengthOf(newTifList) != wavelengths*zSlices)
				newTifList = getFileList(recentestB);
			Array.sort(newTifList);
			for (f=0;f<lengthOf(newTifList);f++) {
				while(!File.exists(dir+"Big5DFileListB.txt"))
					wait(100);
				if (indexOf(big5DFileListBString, recentestB+newTifList[f])<0)
					File.append(recentestB+newTifList[f], dir+"Big5DFileListB.txt");
			}
	    }
	    
		print(nImages+" batch");
		
	    if (isOpen("SPIMA: "+dir)) {
	    	selectWindow("SPIMA: "+dir);
				if (wavelengths > 1) {
					Stack.getActiveChannels(channelsA);
					Stack.getDisplayMode(modeA);
				}
		    Stack.getPosition(channelA, sliceA, frameA);
		  	Stack.setPosition(1, sliceA, frameA);	
			getMinAndMax(minA1, maxA1);
		  	if (wavelengths > 1) {
		  		Stack.setPosition(2, sliceA, frameA);	
				getMinAndMax(minA2, maxA2);
			}
		    getLocationAndSize(xA, yA, widthA, heightA);
		    print(nImages);
		    close();
		    print(nImages);
	    } else {
			channelA=1; sliceA=1; frameA=1; 
			xA=0; yA=0; widthA=0; heightA=0; 
			minA1=0;minA2=0;maxA1=255;maxA2=255;
	    }
	    
		setBatchMode(true);
	    if (File.length(dir+"Big5DFileListA.txt" ) >0) {
		    run("Stack From List...", "open="+dir+"Big5DFileListA.txt use");
		    stkNSlices = nSlices;
		    rename("SPIMA: "+dir);
	    	print(nImages);

			Stack.setDimensions(wavelengths, zSlices, stkNSlices/(wavelengths*zSlices));
			if (wavelengths > 1){
				run("Make Composite", "display=Composite");
			    print(nImages+" HS");
		  	    Stack.setPosition(1, sliceA, frameA);	
			    run("Green");
			    setMinAndMax(minA1, maxA1);	
		  	    Stack.setPosition(2, sliceA, frameA);	
			    run("Red");
			    setMinAndMax(minA2, maxA2);	
		    } else {
				selectWindow("SPIMA: "+dir);
			    setMinAndMax(minA1, maxA1);
	    	}
	  	    Stack.setPosition(channelA, sliceA, stkNSlices/(wavelengths*zSlices));
			if (wavelengths > 1) {
			    Stack.setDisplayMode(modeA);	    
			    Stack.setActiveChannels(channelsA);
			}

		    setVoxelSize(vWidth, vHeight, vDepth, vUnit);    
			updateDisplay();
		
			setBatchMode(false);
			selectWindow("SPIMA: "+dir);
			setLocation(xA,yA);
	    }

	    minB =0;
	    maxB = 255;
	    channelsB = "11";
	    modeB="composite";
	    
		if (isOpen("SPIMB: "+dir)) {
			selectWindow("SPIMB: "+dir);
			if (wavelengths > 1) {
				Stack.getActiveChannels(channels_B);
				Stack.getDisplayMode(mode_B);
			}
		    Stack.getPosition(channelB, sliceB, frameB);
		  	Stack.setPosition(1, sliceB, frameB);	
			getMinAndMax(minB1, maxB1);
			if (wavelengths > 1) {
			  	Stack.setPosition(2, sliceB, frameB);	
				getMinAndMax(minB2, maxB2);
			}
		    getLocationAndSize(xB, yB, widthB, heightB);
		    print(nImages);
		    close();
		    print(nImages);
	   } else {
			channelB=1; sliceB=1; frameB=1; 
			xB=0; yB=0; widthB=0; heightB=0; 
			minB1=0;minB2=0;maxB1=255;maxB2=255;
	   }
		setBatchMode(true);
		
	    if (File.length(dir+"Big5DFileListB.txt" ) >0) {
		    run("Stack From List...", "open="+dir+"Big5DFileListB.txt use");
		    stkNSlices = nSlices;

		    rename("SPIMB: "+dir);

			Stack.setDimensions(wavelengths, zSlices, stkNSlices/(wavelengths*zSlices));
			if (wavelengths > 1){
				run("Make Composite", "display=Composite");
		  	    Stack.setPosition(1, sliceB, frameB);	
			    run("Green");
			    setMinAndMax(minB1, maxB1);
		  	    Stack.setPosition(2, sliceB, frameB);	
			    run("Red");
			    setMinAndMax(minB2, maxB2);
		    } else {
				selectWindow("SPIMB: "+dir);
			    setMinAndMax(minB1, maxB1);
	    	}
	  	    Stack.setPosition(channelB, sliceB, stkNSlices/(wavelengths*zSlices));		    
			if (wavelengths > 1) {
			    Stack.setDisplayMode(modeA);	    
			    Stack.setActiveChannels(channelsA);
			}

		    setVoxelSize(vWidth, vHeight, vDepth, vUnit);    
			updateDisplay();

		    setBatchMode(false);
			selectWindow("SPIMB: "+dir);
		    setLocation(xB,yB);
		    updateDisplay();
	    }
	    
	    deconString = 'nibib.spim.PlugInDialogGenerateFusion(\"reg_one boolean false\", \"reg_all boolean true\", \"no_reg_2D boolean false\", \"reg_2D_one boolean false\", \"reg_2D_all boolean false\", \"rotate_begin list_float -10.0,-10.0,-10.0\", \"rotate_end list_float 10.0,10.0,10.0\", \"coarse_rate list_float 3.0,3.0,3.0\", \"fine_rate list_float 0.5,0.5,0.5\", \"save_arithmetic boolean false\", \"show_arithmetic boolean false\", \"save_geometric boolean false\", \"show_geometric boolean false\", \"do_interImages boolean false\", \"save_prefusion boolean false\", \"do_show_pre_fusion boolean false\", \"do_threshold boolean false\", \"save_max_proj boolean false\", \"show_max_proj boolean false\", \"x_max_box_selected boolean false\", \"y_max_box_selected boolean false\", \"z_max_box_selected boolean false\", \"do_smart_movement boolean false\", \"threshold_intensity double 10.0\", \"res_x double 0.1625\", \"res_y double 0.1625\", \"res_z double 1.0\", \"mtxFileDirectory string '+dir+'SPIMB_processed\", \"spimAFileDir string '+dir+'SPIMB_processed\", \"spimBFileDir string '+dir+'SPIMA_processed\", \"baseImage string SPIMA\", \"base_rotation int -1\", \"transform_rotation int 5\", \"concurrent_num int 1\", \"mode_num int 0\", \"save_type string Tiff\", \"do_deconv boolean true\", \"deconvDirString string '+dir+'Deconvolution\\", \"deconv_show_results boolean false\", \"deconvolution_method int 1\", \"deconv_iterations int 10\", \"deconv_sigmaA list_float 3.5,3.5,9.6\", \"deconv_sigmaB list_float 9.6,3.5,3.5\", \"use_deconv_sigma_conversion_factor boolean true\", \"x_move int 0\", \"y_move int 0\", \"z_move int 0\")';
	    File.saveString(deconString, dir+"GenerateFusion.sct");
	    
	    File.delete(dir+"GenerateFusion.bat");
	    f = File.open(dir+"GenerateFusion.bat");
	    batStringA = "cd C:\\\\Program Files\\\\mipav";
	    batStringB = "mipav -s "+replace(dir,"\\\\","\\\\\\\\")+"GenerateFusion.sct -hide";
	    batStringC = "C:";
	    print(f,batStringC);
	    print(f,batStringA);
	    print(f,batStringB);
		File.close(f);	    
		
	    if (focus) {
		    print(nImages);
		    File.delete(dir+"AutoFocusCommaSpace.txt");
		    //File.delete(dir+"AutoFocusNewLine.txt");
			autoFocusString = "";
			for (i=1;i<=nImages;i++){
				print(nImages+" "+i);
				
				setBatchMode(true);
				selectImage(i);
		
				source = getTitle();
				Stack.getDimensions(width, height, channels, zDepth, frames);
				Stack.getPosition(channel, slice, frame);
				for (z=0; z<zDepth; z++) { 
					Stack.setSlice(z+1);
					run("FFT, no auto-scaling");
					if (z==0) {
						rename("FFTstack");	
					} else {
						run("Select All");
						run("Copy");
						close();
						selectWindow("FFTstack");
						run("Add Slice");
						if (z>0)
							Stack.setSlice(z+2);
						run("Select All");
						run("Paste");
					}
					selectWindow(source);
				}
				selectWindow("FFTstack");
				makeOval(250, 250, 13, 13);
				run("Clear", "stack");
				makeOval(220, 220, 73, 73);
				run("Clear Outside", "stack");
				run("Plot Z-axis Profile");
				close();
				selectWindow("FFTstack");
				close();
				
				sliceAvgs = newArray(zDepth);
				List.clear;
				for (z=1; z<zDepth; z++) { 
					sliceAvgs[z] = getResult("Mean", z);
					//print(sliceAvgs[z] );
					List.set(sliceAvgs[z] , z);
				}
				
				Array.sort(sliceAvgs);
				print(source+": Best focus in slice "+List.get(sliceAvgs[zDepth-1]));
				autoFocusString = autoFocusString + List.get(sliceAvgs[zDepth-1])+", ";
				selectWindow("Results");
				run("Close");
				setBatchMode(false);
				selectWindow(source);
				Stack.setPosition(channel, slice, frame);
				updateDisplay();
			}
			File.saveString(autoFocusString, dir+"AutoFocusCommaSpace.txt");			
		}		    
	}
}

macro "BkSubCropMacro" {
	sourceDir = getDirectory("Select the first stack folder");
	sourceRoot = substring(sourceDir, 0, lengthOf(sourceDir)-2);
	print(sourceRoot);
	sourceParentChunks = split(File.getParent(sourceDir), File.separator);
	sourceParentName = sourceParentChunks[lengthOf(sourceParentChunks)-1];
	saveDir = File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_processed"+File.separator;
	print(saveDir);
	
	run("Image Sequence...", "open=" + sourceDir+File.separator+"BV192_SPIMB_0000.tif sort");
	original = getTitle();
	run("Z Project...", "projection=[Max Intensity]");
	close(original);
	selector = getImageID;
	uniqueTitleA = getTitle() + selector;
	rename(uniqueTitleA);
	
	if (!File.exists(File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_crop.roi")) {
		makeRectangle(0,0,325,425);
	} else {
		open(File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_crop.roi");
	}
	waitForUser("Select the region containing the embryo");
	
	getSelectionBounds(x, y, w, h);
	save(File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_crop.roi");
	
	close(uniqueTitleA);
	
	setBatchMode(true);
	
	list = getFileList(File.getParent(sourceDir));
	count = 0;
	previousCount = -1;
	
	run("Image Sequence...", "open=" + File.getParent(sourceDir)+File.separator+"bg0"+File.separator+"BV192_SPIMB_0000.tif sort");
	bg = getImageID;
	uniqueTitleB = getTitle() + bg;
	rename(uniqueTitleB);
	
	run("Z Project...", "projection=[Average Intensity]");
	bgAvID = getImageID();
	uniqueTitleV = getTitle() + bgAvID;
	rename(uniqueTitleV);
	
	close(uniqueTitleB);
	
	//while (true){
		for (l=0;l<lengthOf(list);l++) {
			if(startsWith(File.getParent(sourceDir)+File.separator+list[l], sourceRoot)) {
				count++; 
			}
		}
		if(count >previousCount){
			for(i=0;i<count;i++) {
				if (!File.exists(saveDir+sourceParentName+"_"+i+".tif")) {
					run("Image Sequence...", "open=" + sourceRoot+i+File.separator+"BV192_SPIMB_0000.tif sort");
					title = getImageID;
					uniqueTitleC = getTitle() + title;
					rename(uniqueTitleC);
					
					imageCalculator("Subtract create stack", title, uniqueTitleV);
					//selectWindow("Result of egl46wam"+i+"");
					//setTool("rectangle");
					subID = getImageID();
					uniqueTitleD = getTitle() + subID;
					rename(uniqueTitleD);
			
					//makeRectangle(x,y,325,425);
					open(File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_crop.roi");
					run("Crop");
					File.makeDirectory(saveDir);
					saveAs("Tiff", saveDir+sourceParentName+"_"+i+".tif");
			
					close(sourceParentName+"_"+i+".tif");
			
					close(uniqueTitleC);
				}
			}
		}
		previousCount = count;
	//}
	//close(uniqueTitleV);
	setBatchMode(false);
}


macro "BkSubCropMacroNewNames" {
	sourceDir = getDirectory("Select the first stack folder");
	sourceRoot = substring(sourceDir, 0, lengthOf(sourceDir)-2);
	print(sourceRoot);
	sourceParentChunks = split(File.getParent(sourceDir), File.separator);
	sourceParentName = sourceParentChunks[lengthOf(sourceParentChunks)-1];
	saveDir = File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_processed"+File.separator;
	print(saveDir);
	
	sourceList = getFileList(sourceDir);
	
	run("Image Sequence...", "open=" + sourceDir+File.separator+""+sourceList[0]+" sort");
	original = getTitle();
	run("Z Project...", "projection=[Max Intensity]");
	close(original);
	selector = getImageID;
	uniqueTitleA = getTitle() + selector;
	rename(uniqueTitleA);
	
	if (!File.exists(File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_crop.roi")) {
		makeRectangle(0,0,325,425);
	} else {
		open(File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_crop.roi");
	}
	waitForUser("Select the region containing the embryo");
	
	getSelectionBounds(x, y, w, h);
	save(File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_crop.roi");
	
	close(uniqueTitleA);
	
	setBatchMode(true);
	
	list = getFileList(File.getParent(sourceDir));
	count = 0;
	previousCount = -1;
		
		bgMax = 0;
		for (l=0;l<lengthOf(list);l++) {
			if(startsWith(File.getParent(sourceDir)+File.separator+list[l], "bg")) {
				bgNum = parseInt(replace(list[l],"bg","")); 
				if (bgNum > bgMax)
					bgMax = bgNum;
			}
		}
	
	
	bgList = getFileList(File.getParent(sourceDir)+File.separator+"bg"+bgMax+File.separator);
	
	run("Image Sequence...", "open=" + File.getParent(sourceDir)+File.separator+"bg+bgMax"+File.separator+""+bgList[0]+" sort");
	bg = getImageID;
	uniqueTitleB = getTitle() + bg;
	rename(uniqueTitleB);
	
	run("Z Project...", "projection=[Average Intensity]");
	bgAvID = getImageID();
	uniqueTitleV = getTitle() + bgAvID;
	rename(uniqueTitleV);
	
	close(uniqueTitleB);
	
	//while (true){
		for (l=0;l<lengthOf(list);l++) {
			if(startsWith(File.getParent(sourceDir)+File.separator+list[l], sourceRoot)) {
				count++; 
			}
		}
		if(count >previousCount){
			for(i=1;i<=count;i++) {
				if (!File.exists(saveDir+sourceParentName+"_"+i+".tif")) {
					sourceRootiList = getFileList(sourceRoot+i+File.separator);
				
					run("Image Sequence...", "open=" + sourceRoot+i+File.separator+""+sourceRootiList[0]+" sort");
					title = getImageID;
					uniqueTitleC = getTitle() + title;
					rename(uniqueTitleC);
					
					imageCalculator("Subtract create stack", title, uniqueTitleV);
					//selectWindow("Result of egl46wam"+i+"");
					//setTool("rectangle");
					subID = getImageID();
					uniqueTitleD = getTitle() + subID;
					rename(uniqueTitleD);
			
					//makeRectangle(x,y,325,425);
					open(File.getParent(File.getParent(sourceDir))+File.separator+sourceParentName+"_crop.roi");
					run("Crop");
					File.makeDirectory(saveDir);
					saveAs("Tiff", saveDir+sourceParentName+"_"+i+".tif");
			
					close(sourceParentName+"_"+i+".tif");
			
					close(uniqueTitleC);
				}
			}
		}
		previousCount = count;
	//}
	//close(uniqueTitleV);
	setBatchMode(false);
}

macro "zMIP_MovieMacro" {
	run("MultiTIFF Virtual Stack");
	Stack.getDimensions(width, height, channels, slices, frames);
	run("Z Project...", "start=1 stop=" + slices + " projection=[Max Intensity] all");
	run("Tiff...");
}
